PsychoPy2experiment version="2022.2.5"
Settings
  Completed URL = $"https://carletonu.az1.qualtrics.com/jfe/form/SV_abioZUE0xPHYtBY?id="+expInfo['participant']+"&source="+expInfo['source']+"&random_id="+expInfo['random_id']+"&L1="+expInfo['L1']
  Experiment info = {'participant': 'Leave this blank', 'L1': 'English / Anglais', 'source': 'none', 'random_id': 'none'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['spatial_span_key3.csv', 'spatial_span_key2.csv', 'spatial_span_key.csv', 'FHA_MI_COAXING.mp4', 'FHA_MI_MOCKING.mp4', 'FHA_MI_SEDUCING.mp4', 'FHA_NI_BILLIARD.mp4', 'FHA_NI_STAR.mp4', 'FHA_NI_TENNIS.mp4', 'FHA_PI_CHASE.mp4', 'FHA_PI_DANCING.mp4', 'FHA_PI_LEADING.mp4', 'finaltestinstructions.png', 'key.png', '1.png', '2.png', '3.png', '4.png', '5.png', '6.png', '7.png', '8.png', '9.png', 'animations_key.csv']
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[1.000,1.000,1.000]
  expName = BilingualismStudy
  exportHTML = manually
  keyboardBackend = ioHub
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Routines
  Routine DSST_settings
    CodeComponent js_funcs
      Code Type = JS
      Begin JS Experiment:
        if( /Android|webOS|iPhone|iPad|iPod|BlackBerry|IEMobile|Opera Mini/i.test(navigator.userAgent) ) {
          quitPsychoJS('Mobile device detected. Goodbye!', false)
        }

        event=psychoJS.eventManager;

        thisExp=psychoJS.experiment;

        win=psychoJS.window;

        shuffle = util.shuffle;

        Array.prototype.append = [].push;

        range = function (size, startAt = 0) {
            return [...Array(size).keys()].map(i => i + startAt);
        }

        $.getJSON('https://api.ipify.org?format=json', function(data){

        console.log(data.ip);
        localStorage.setItem('ip',data.ip);

        psychoJS.experiment.addData('IP_Addresss', data.ip)

        });

        document.body.style.cursor='none';
      End JS Experiment:
        document.body.style.cursor='auto';
    CodeComponent colors
      Code Type = Auto->JS
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      Begin Experiment:
        white=[1,1,1]
        grey=[.2,.2,.2]
        yellow=[1,1,0]
        green=[-1,0,-1]
        black=[-1,-1,-1]
        red=[1,-1,-1]
    CodeComponent set_practice
      Code Type = Both
      Begin Experiment:
        ncols = 16
        nrows = 9
        cell_size = .04
        pics = ['1.png','2.png','3.png','4.png','5.png','6.png','7.png','8.png','9.png']
      Begin JS Experiment:
        ncols = 16;
        nrows = 9;
        cell_size = 0.04;
        pics = ["1.png", "2.png", "3.png", "4.png", "5.png", "6.png", "7.png", "8.png", "9.png"];
      Begin JS Routine:
        counter = 3;
        key_list = [];
        xy_pos = [];
        all_pics = ["3.png", "1.png", "5.png", "4.png", "9.png", "7.png", "2.png", "8.png", "6.png"];
        x_pos = function () {
            var _pj_a = [], _pj_b = util.range(9);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var x0 = _pj_b[_pj_c];
                _pj_a.push(((- 0.16) + (x0 * 0.04)));
            }
            return _pj_a;
        }
        .call(this);
        y_pos = [(- 0.2)];
        for (var y0, _pj_c = 0, _pj_a = y_pos, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            y0 = _pj_a[_pj_c];
            for (var x0, _pj_f = 0, _pj_d = x_pos, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                x0 = _pj_d[_pj_f];
                xy_pos.push([x0, y0]);
            }
        }
        img_list = [];
        rect_list = [];
        rect2_list = [];
        input_list = [];
        for (var i, _pj_c = 0, _pj_a = util.range(xy_pos.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            img_list.push(new visual.ImageStim({"win": psychoJS.window, "image": all_pics[i], "pos": [xy_pos[i][0], xy_pos[i][1]], "size": [cell_size, cell_size]}));
            rect_list.push(new visual.Rect({"win": psychoJS.window, "pos": [xy_pos[i][0], xy_pos[i][1]], "width": cell_size, "height": cell_size, "lineColor": [(- 1), (- 1), (- 1)]}));
            rect2_list.push(new visual.Rect({"win": psychoJS.window, "pos": [xy_pos[i][0], (xy_pos[i][1] - cell_size)], "width": cell_size, "height": cell_size, "lineColor": [(- 1), (- 1), (- 1)]}));
            if ((i < 3)) {
                input_list.push(new visual.TextStim({"win": psychoJS.window, "text": all_pics[i][0], "font": "Arial", "pos": [xy_pos[i][0], (xy_pos[i][1] - cell_size)], "height": cell_size, "color": [(- 1), (- 1), (- 1)]}));
            } else {
                input_list.push(new visual.TextStim({"win": psychoJS.window, "text": " ", "font": "Arial", "pos": [xy_pos[i][0], (xy_pos[i][1] - cell_size)], "height": cell_size, "color": [(- 1), (- 1), (- 1)]}));
            }
        }
        red_box = new visual.Rect({"win": psychoJS.window, "pos": [xy_pos[3][0], (xy_pos[3][1] - (cell_size / 2))], "width": cell_size, "height": (2 * cell_size), "lineWidth": 3, "lineColor": new util.Color([1, -1, -1])});
        error = new visual.TextStim({"win": psychoJS.window, "text": "Please type in the correct number!", "font": "Arial", "pos": [0, (- 0.4)], "height": 0.025, "color": [1, (- 1), (- 1)]});
      Begin Routine:
        counter = 3
        key_list = []

        # get all positions and picture order
        xy_pos = [] # to store x y positions
        all_pics = ['3.png','1.png','5.png','4.png','9.png','7.png','2.png','8.png','6.png'] # to store stimuli in one page
        x_pos = [-.16 + x0*.04 for x0 in range(9)]
        y_pos = [-.2]
        for y0 in y_pos:
            for x0 in x_pos:
                xy_pos.append([x0,y0])

        # construct stimuli objects
        img_list = []
        rect_list = []
        rect2_list = []
        input_list = []
        for i in range(len(xy_pos)):
            # draw picture
            img_list.append(visual.ImageStim(
            win=win,
            image=all_pics[i],
            pos=[xy_pos[i][0], xy_pos[i][1]],
            size=[cell_size, cell_size])
            )
            # draw box around picture
            rect_list.append(visual.Rect(
            win=win,
            pos=[xy_pos[i][0], xy_pos[i][1]],
            width=cell_size,
            height=cell_size,
            lineColor=[-1,-1,-1])
            )
            # draw box around input
            rect2_list.append(visual.Rect(
            win=win,
            pos=[xy_pos[i][0], xy_pos[i][1]-cell_size],
            width=cell_size,
            height=cell_size,
            lineColor=[-1,-1,-1])
            )

            # draw placeholder for that will later be updated with actual input
            if i < 3:
                input_list.append(visual.TextStim(
                win=win,
                text=all_pics[i][0],
                font='Arial',
                pos=(xy_pos[i][0], xy_pos[i][1]-cell_size),
                height=cell_size,
                color=[-1,-1,-1])
                )
            else:
                input_list.append(visual.TextStim(
                win=win,
                text=' ',
                font='Arial',
                pos=(xy_pos[i][0], xy_pos[i][1]-cell_size),
                height=cell_size,
                color=[-1,-1,-1])
                )

        # draw box that highlight the current field
        red_box = visual.Rect(
        win=win,
        pos=[xy_pos[3][0], xy_pos[3][1]-cell_size/2],
        width=cell_size,
        height=2*cell_size,
        lineWidth=3,
        lineColor=red)

        # error feedback
        error = visual.TextStim(
                win=win,
                text='Please type in the correct number!',
                font='Arial',
                pos=(0, -.4),
                height=.025,
                color=[1,-1,-1])
  Routine DSST_prac
    CodeComponent code_practice
      Code Type = Both
      Begin JS Routine:
        for (var i, _pj_c = 0, _pj_a = img_list, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.setAutoDraw(true);
        }
        for (var i, _pj_c = 0, _pj_a = rect_list, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.setAutoDraw(true);
        }
        for (var i, _pj_c = 0, _pj_a = rect2_list, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.setAutoDraw(true);
        }
        for (var i, _pj_c = 0, _pj_a = input_list, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.setAutoDraw(true);
        }
        red_box.pos = [xy_pos[counter][0], (xy_pos[counter][1] - (cell_size / 2))];
        red_box.setAutoDraw(true);
        correct_key = all_pics[counter][0];
      Begin Routine:
        #img_list[1] = visual.ImageStim(
        #    win=win,
        #    image=all_pics[1],
        #    pos=[xy_pos[1][0]/2, xy_pos[1][1]/2],
        #    size=[cell_size, cell_size])

        #img_list.append(visual.ImageStim(
        #    win=win,
        #    image=all_pics[i],
        #    pos=[xy_pos[i][0], xy_pos[i][1]],
        #    size=[cell_size, cell_size])
        #    )


        # display components
        for i in rect_list:
            i.setAutoDraw(True)

        for i in rect2_list:
            i.setAutoDraw(True)

        red_box.pos = [xy_pos[counter][0], xy_pos[counter][1]-cell_size/2]
        red_box.setAutoDraw(True)

        for i in img_list:
            i.setAutoDraw(True)

        for i in input_list:
            i.setAutoDraw(True)

        #first_pic = visual.ImageStim(
        #    win=win,
        #    image='1.png',
        #    pos=[-0.4, -0.4],
        #    size=[cell_size, cell_size])

        #first_pic.setAutoDraw(True)
        #img_list[2].setAutoDraw(True)

        # decide correctness
        correct_key = all_pics[counter][0]
      End JS Routine:
        thisExp.addData("img", all_pics[counter]);
        thisExp.addData("correct_key", correct_key);
        if ((practice_resp.corr === 1)) {
            key_list.append(practice_resp.keys);
            for (var i = 0, _pj_a = key_list.length; (i < _pj_a); i += 1) {
                input_list[(i + 3)].text = key_list[i];
            }
            counter = (counter + 1);
            practice_loop.finished = true;
            error.setAutoDraw(false);
        } else {
            error.setAutoDraw(true);
        }
        for (var i, _pj_c = 0, _pj_a = img_list, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.setAutoDraw(false);
        }
        for (var i, _pj_c = 0, _pj_a = rect_list, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.setAutoDraw(false);
        }
        for (var i, _pj_c = 0, _pj_a = rect2_list, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.setAutoDraw(false);
        }
        for (var i, _pj_c = 0, _pj_a = input_list, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.setAutoDraw(false);
        }
        red_box.setAutoDraw(false);
      End Routine:
        # log data
        thisExp.addData('img', all_pics[counter])
        thisExp.addData('correct_key', correct_key)


        if practice_resp.corr == 1:
            # get response
            key_list.append(practice_resp.keys)

            # update text object
            for i in range(len(key_list)):
                input_list[i+3].text=key_list[i]

            # update trial count
            counter = counter + 1

            # end loop
            practice_loop.finished=True
            error.setAutoDraw(False)
        else:
            # show error
            error.setAutoDraw(True)

        # clear components
        for i in img_list:
            i.setAutoDraw(False)

        for i in rect_list:
            i.setAutoDraw(False)

        for i in rect2_list:
            i.setAutoDraw(False)

        for i in input_list:
            i.setAutoDraw(False)

        red_box.setAutoDraw(False)
    TextComponent DSST_prac_text1_EN
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'English / Anglais'
      text = In this task, you will need to fill in the blanks based on a key. Below is the key. Each symbol in the top box has a corresponding number in the bottom box.
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    TextComponent DSST_prac_text1_FR
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'French / Français'
      text = Dans cette tâche, vous devrez remplir les espaces vides selon une légende qui se trouve ci-dessous. Chaque symbole dans la case du haut correspond à un numéro situé dans la case du bas.
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    ImageComponent key_image_3
      color = $[1.000,1.000,1.000]
      image = key.png
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent DSST_prac_text2_EN
      color = black
      letterHeight = 0.04
      pos = (0, -.05)
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'English / Anglais'
      text = Below is a practice. You can see that the first three spaces are already filled in. Fill in the remaining spaces using the number keys on your keyboard (1-9).
      wrapWidth = 1
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    TextComponent DSST_prac_text2_FR
      color = black
      letterHeight = 0.04
      pos = (0, -.05)
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'French / Français'
      text = Ci-dessous une pratique. Vous pouvez voir que les trois premiers espaces sont déjà remplis. Remplissez les espaces restants à l'aide des touches numériques de votre clavier (1-9).
      wrapWidth = 1
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    KeyboardComponent practice_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      correctAns = $correct_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine DSST_end_practice
    CodeComponent set_timer
      Code Type = Both
      End JS Routine:
        // timer = new util.Clock();
        // timer = "unset";
        isTimerStarted = false;
        max_time = 90;
      End Routine:
        # timer = core.Clock()
        # timer = "unset"
        isTimerStarted = False
        max_time = 90
    TextComponent DSST_end_prac_text_EN
      color = black
      letterHeight = .04
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'English / Anglais'
      wrapWidth = 1
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      text:
        You have finished the practice! Next, you will complete the real task.

        You will see the key and a large blank grid. You will have 90 seconds to fill in as many cells as you can. You will not be able to go back if you make a mistake.

        Press SPACE to continue.
    TextComponent DSST_end_prac_text_FR
      color = black
      letterHeight = .04
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'French / Français'
      wrapWidth = 1
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      text:
        Vous avez terminé la pratique ! Maintenant, vous exécuterez la vraie tâche.

        Vous verrez la clé et une grande grille vide. Vous aurez 90 secondes pour remplir le plus d’espaces vides possible. Vous ne pourrez pas revenir en arrière si vous faites une erreur.

        Appuyiez sur ESPACE pour continuer.
    KeyboardComponent ins2_key
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine FHAT_instr
    TextComponent FHAT_instr_text_EN
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'English / Anglais'
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      text:
        You will see a series of nine videos (each under one minute) depicting two moving triangles. After each video, you will choose which of the following best describes their movement in the video:

        1. No interaction: There is no obvious interaction between the triangles and movement appears random.

        2. Physical interaction: An interaction between the triangles in which actions are directed toward each other in order to achieve specific goals.

        3. Mental interaction: An interaction between the triangles involving the manipulation of the emotions and thoughts of one triangle by the other triangle.

        Press SPACE to continue.
    TextComponent FHAT_instr_text_FR
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'French / Français'
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      text:
        Une série de neuf vidéos (chacune de moins d’une minute) vous sera présentée montrant deux triangles en mouvement. Après chaque vidéo, vous devrez choisir laquelle des propositions suivantes décrit le mieux leurs mouvements :

        1. Aucune interaction : Il n’y a pas d’interaction évidente entre les triangles et le mouvement semble aléatoire.

        2. Interaction physique : Une interaction entre les triangles dans laquelle les actions sont dirigées les unes vers les autres afin d’atteindre des objectifs spécifiques.

        3. Interaction mentale : Une interaction entre les triangles impliquant la manipulation des émotions et des pensées d’un triangle par l’autre triangle.

        Appuyiez sur ESPACE pour continuer.
    KeyboardComponent FHAT_instr_cont
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine FHAT_video
    MovieComponent FHAT_animation
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $movie_filename
      size = 1, 0.75
      startVal [time (s)] = 0
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  Routine FHAT_video_q
    TextComponent FHAT_question_EN
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [condition] = expInfo['L1'] == 'English / Anglais'
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      text:
        Select which of the three options best describes the clip you have just seen by typing "1", "2", or "3".

        1. No interaction
        2. Physical interaction
        3. Mental interaction
    TextComponent FHAT_question_FR
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [condition] = expInfo['L1'] == 'French / Français'
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      text:
        Sélectionnez parmi les trois options celle qui décrit le mieux le clip que vous venez de voir en tapant "1", "2" ou "3".

        1. Aucune interaction
        2. Interaction physique
        3. Interaction mentale
    KeyboardComponent FHAT_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine SST_instr
    TextComponent SST_instr_text_EN
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'English / Anglais'
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      text:
        On the next screen you will see nine grey boxes. A series of them will flash in color and you will need to remember the order in which they flashed. When they stop flashing, click on them in that order. Then, a new series will flash in another color and you will identify the order again. The number of boxes in the series will gradually increase.

        Press SPACE to continue.
    TextComponent SST_instr_text_FR
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'French / Français'
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      text:
        Sur l'écran suivant, vous verrez neuf cases grises. Une série de ces cases clignotera en couleur et vous devrez vous souvenir de l'ordre dans lequel ces cases ont clignoté. Quand ils arrêtent de clignoter, il vous sera demandé de cliquer sur ces cases dans ce même ordre. Par la suite, une nouvelle série clignotera dans un autre couleur et vous devrez encore identifier l’ordre. Le nombre de boîtes dans la série augmentera progressivement chaque fois.

        Appuyiez sur ESPACE pour continuer.
    KeyboardComponent SST_instr_cont
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine DSST_trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # display components
        for i in rect_list:
            i.setAutoDraw(True)

        for i in rect2_list:
            i.setAutoDraw(True)

        #if len(display_list) > 0:
        #    for i in display_list:
        #        i.setAutoDraw(True)

        red_box.pos = [xy_pos[counter][0], xy_pos[counter][1]-cell_size/2]
        red_box.setAutoDraw(True)

        for i in img_list:
            i.setAutoDraw(True)

        for i in input_list:
            i.setAutoDraw(True)

        # decide correctness
        correct_key = all_pics[counter][0]
      Each Frame:
        current_time = round(max_time - timer.getTime(), 0)

        if timer.getTime() > max_time:
            #continueRoutine = False
            loop.finished = True
            page_loop.finished = True
      End Routine:
        # get response
        key_list.append(resp.keys)

        # update text object
        for i in range(len(key_list)):
            input_list[i].text=key_list[i]

        #disp_txt = visual.TextStim(win=win,
        #text=resp.keys,
        #font='Arial',
        #pos=(xy_pos[counter][0], xy_pos[counter][1]-cell_size),
        #height=cell_size,
        #color=[-1,-1,-1])

        #disp_txt.text=resp.keys
        #disp_txt.pos=(xy_pos[counter][0], xy_pos[counter][1]-cell_size)

        # clear components
        for i in img_list:
            i.setAutoDraw(False)

        for i in rect_list:
            i.setAutoDraw(False)

        for i in rect2_list:
            i.setAutoDraw(False)

        for i in input_list:
            i.setAutoDraw(False)

        red_box.setAutoDraw(False)

        # log data
        thisExp.addData('img', all_pics[counter])
        thisExp.addData('correct_key', correct_key)
        thisExp.addData('current_time', current_time)

        # update trial count
        counter = counter + 1
    ImageComponent key_image
      color = $[1.000,1.000,1.000]
      image = key.png
      pos = (0, 0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.03
      pos = (.45, .45)
      startVal [time (s)] = 0.0
      text [set every frame] = $current_time
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    KeyboardComponent resp
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine DSST_start_page
    CodeComponent set_stimuli
      Code Type = Both
      Begin Experiment:
        ncols = 16
        nrows = 9
        cell_size = .04
        pics = ['1.png','2.png','3.png','4.png','5.png','6.png','7.png','8.png','9.png']
      Begin JS Experiment:
        ncols = 16;
        nrows = 9;
        cell_size = 0.04;
        pics = ["1.png", "2.png", "3.png", "4.png", "5.png", "6.png", "7.png", "8.png", "9.png"];
      Begin JS Routine:
        counter = 0;
        key_list = [];
        xy_pos = [];
        all_pics = [];
        x_pos = function () {
            var _pj_a = [], _pj_b = util.range(ncols);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var x0 = _pj_b[_pj_c];
                _pj_a.push(((- 0.3) + (x0 * 0.04)));
            }
            return _pj_a;
        }
        .call(this);
        y_pos = function () {
            var _pj_a = [], _pj_b = util.range(nrows);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var y0 = _pj_b[_pj_c];
                _pj_a.push((0.3 - (y0 * 0.08)));
            }
            return _pj_a;
        }
        .call(this);
        for (var y0, _pj_c = 0, _pj_a = y_pos, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            y0 = _pj_a[_pj_c];
            for (var x0, _pj_f = 0, _pj_d = x_pos, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                x0 = _pj_d[_pj_f];
                xy_pos.push([x0, y0]);
                util.shuffle(pics);
                all_pics.push(pics[0]);
            }
        }
        img_list = [];
        rect_list = [];
        rect2_list = [];
        input_list = [];
        for (var i, _pj_c = 0, _pj_a = util.range(xy_pos.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            img_list.push(new visual.ImageStim({"win": psychoJS.window, "image": all_pics[i], "pos": [xy_pos[i][0], xy_pos[i][1]], "size": [cell_size, cell_size]}));
            rect_list.push(new visual.Rect({"win": psychoJS.window, "pos": [xy_pos[i][0], xy_pos[i][1]], "width": cell_size, "height": cell_size, "lineColor": [(- 1), (- 1), (- 1)]}));
            rect2_list.push(new visual.Rect({"win": psychoJS.window, "pos": [xy_pos[i][0], (xy_pos[i][1] - cell_size)], "width": cell_size, "height": cell_size, "lineColor": [(- 1), (- 1), (- 1)]}));
            input_list.push(new visual.TextStim({"win": psychoJS.window, "text": " ", "font": "Arial", "pos": [xy_pos[i][0], (xy_pos[i][1] - cell_size)], "height": cell_size, "color": [(- 1), (- 1), (- 1)]}));
        }
        red_box = new visual.Rect({"win": psychoJS.window, "pos": [xy_pos[0][0], (xy_pos[0][1] - (cell_size / 2))], "width": cell_size, "height": (2 * cell_size), "lineWidth": 3});
        red_box.lineColor = new util.Color([1, -1, -1]);

        if (isTimerStarted == false)
        {
            timer = new util.Clock();
            isTimerStarted = true;
        }
      Begin Routine:
        counter = 0
        key_list = []

        # get all positions and picture order
        xy_pos = [] # to store x y positions
        all_pics = [] # to store stimuli in one page
        x_pos = [-.3 + x0*.04 for x0 in range(ncols)]
        y_pos = [.3 - y0*.08 for y0 in range(nrows)]
        for y0 in y_pos:
            for x0 in x_pos:
                xy_pos.append([x0,y0])
                shuffle(pics)
                all_pics.append(pics[0])

        # construct stimuli objects
        img_list = []
        rect_list = []
        rect2_list = []
        input_list = []
        for i in range(len(xy_pos)):
            # draw picture
            img_list.append(visual.ImageStim(
            win=win,
            image=all_pics[i],
            pos=[xy_pos[i][0], xy_pos[i][1]],
            size=[cell_size, cell_size])
            )
            # draw box around picture
            rect_list.append(visual.Rect(
            win=win,
            pos=[xy_pos[i][0], xy_pos[i][1]],
            width=cell_size,
            height=cell_size,
            lineColor=[-1,-1,-1])
            )
            # draw box around input
            rect2_list.append(visual.Rect(
            win=win,
            pos=[xy_pos[i][0], xy_pos[i][1]-cell_size],
            width=cell_size,
            height=cell_size,
            lineColor=[-1,-1,-1])
            )
            # draw placeholder for that will later be updated with actual input
            input_list.append(visual.TextStim(
            win=win,
            text=' ',
            font='Arial',
            pos=(xy_pos[i][0], xy_pos[i][1]-cell_size),
            height=cell_size,
            color=[-1,-1,-1])
            )

        # draw box that highlight the current field
        red_box = visual.Rect(
        win=win,
        pos=[xy_pos[0][0], xy_pos[0][1]-cell_size/2],
        width=cell_size,
        height=2*cell_size,
        lineWidth=3)
        red_box.lineColor = 'red'

        if isTimerStarted == False:
            timer = core.Clock()
            isTimerStarted = True
  Routine task_done
    TextComponent task_done_text_EN
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'English / Anglais'
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      text:
        Good work! You have finished the task.

        Press SPACE to continue.
    TextComponent task_done_text_FR
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'French / Français'
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      text:
        Bon travail! Vous avez terminé la tâche.

        Appuyiez sur ESPACE pour continuer.
    KeyboardComponent task_done_cont
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SST_done_set
    TextComponent SST_done_set_text_EN
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'English / Anglais'
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      text:
        You have finished the set! The same instructions apply to the next set.

        Press SPACE to continue.
    TextComponent SST_done_set_text_FR
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'French / Français'
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      text:
        Vous avez terminé l’essai ! Les mêmes instructions s'appliquent à l’essai suivant.

        Appuyiez sur ESPACE pour continuer.
    KeyboardComponent SST_done_set_cont
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SST_flash1
    PolygonComponent background
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_1
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (-0.3, 0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_2
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0, 0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_3
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_4
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (-0.3, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_5
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_6
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0.3, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_7
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (-0.3, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_8
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_9
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0.3, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_spatial_span
      Code Type = Both
      Begin JS Routine:
        squares = [square_1, square_2, square_3, square_4, square_5, square_6, square_7, square_8, square_9];
        highlights = [Flash1, Flash2, Flash3, Flash4, Flash5, Flash6, Flash7, Flash8, Flash9, Flash10];
        start_time = 2;
        flash_time = 1;
        end_time = (flash_time * Num_of_flashes);
        end_delay = 0.75;
        end_delay_time = 999999;
        squares_clicked = [];
        click_count = 0;
        output_column_name = 'bad_name';

        counter = new util.Clock();
        inactive_color = new util.Color([0.6549, 0.6549, 0.6549]);
        activated_color = new util.Color([-0.3, -0.3, -0.3]);
        highlight_color = new util.Color([Red, Green, Blue]);
        document.body.style.cursor='auto';

        for (var i, _pj_c = 0, _pj_a = util.range(9), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            squares[i].fillColor = inactive_color;
        }
      Begin Routine:
        squares = [square_1, square_2, square_3, square_4, square_5, square_6, square_7, square_8, square_9]
        highlights = [Flash1, Flash2, Flash3, Flash4, Flash5, Flash6, Flash7, Flash8, Flash9, Flash10]
        start_time = 2
        flash_time = 1
        end_time = (flash_time * Num_of_flashes)
        end_delay = 0.75
        end_delay_time = 999999
        squares_clicked = []
        click_count = 0
        output_column_name = 'bad_name'

        # These have to be different in JavaScript
        counter = core.Clock()
        inactive_color = 'lightgrey'
        activated_color = 'darkgrey'
        highlight_color = [Red, Green, Blue]
        win.setMouseVisible(True);

        for i in range(9):
            squares[i].color = inactive_color
      Each Frame:
        #Return time in seconds since routine began
        current_time = counter.getTime() - start_time

        current_flash = current_time / flash_time
        current_index = int(current_flash)
        if current_time >= 0 and current_index >= 0 and current_index < Num_of_flashes:
            flash_fraction = current_flash - current_index
            highlight = highlights[current_index] - 1
            if flash_fraction < 0.67:
                squares[highlight].color = highlight_color
            else:
                squares[highlight].color = inactive_color

        if current_time >= end_time:
            for i in range(9):
                if mouse.isPressedIn(squares[i]):
                    if click_count > 0:
                        if squares_clicked[click_count - 1] == i + 1:
                            break   # duplicate, don't save

                    squares_clicked.append(i + 1)
                    click_count += 1
                    for j in range(9):
                        squares[j].color = inactive_color
                    squares[i].color = activated_color

                    if click_count == Num_of_flashes:
                        output_column_name = str('Output_sst')
                        thisExp.addData(output_column_name, squares_clicked)
                        for j in range(Num_of_flashes):
                            if squares_clicked[j] != highlights[j]:
                                SST_trials1.finished = True
                        end_delay_time = current_time + end_delay

        if current_time >= end_delay_time:
            continueRoutine = False

        # https://discourse.psychopy.org/t/code-component-to-count-mouse-clicks/11621/26

        # 'output_sst_' + str(Num_of_flashes)
      Each JS Frame:
        current_time = (counter.getTime() - start_time);
        current_flash = (current_time / flash_time);
        current_index = Number.parseInt(current_flash);
        if ((((current_time >= 0) && (current_index >= 0)) && (current_index < Num_of_flashes))) {
            flash_fraction = (current_flash - current_index);
            highlight = (highlights[current_index] - 1);
            if ((flash_fraction < 0.67)) {
                squares[highlight].fillColor = highlight_color;
            } else {
                squares[highlight].fillColor = inactive_color;
            }
        }
        if ((current_time >= end_time)) {
            for (var i, _pj_c = 0, _pj_a = util.range(9), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                if (mouse.isPressedIn(squares[i])) {
                    if ((click_count > 0)) {
                        if ((squares_clicked[(click_count - 1)] === (i + 1))) {
                            break;
                        }
                    }
                    squares_clicked.push((i + 1));
                    click_count += 1;
                    for (var j, _pj_f = 0, _pj_d = util.range(9), _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                        j = _pj_d[_pj_f];
                        squares[j].fillColor = inactive_color;
                    }
                    squares[i].fillColor = activated_color;
                    if ((click_count === Num_of_flashes)) {
                        output_column_name = "Output_sst".toString();
                        psychoJS.experiment.addData(output_column_name, squares_clicked);
                        for (var j, _pj_f = 0, _pj_d = util.range(Num_of_flashes), _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                            j = _pj_d[_pj_f];
                            if ((squares_clicked[j] !== highlights[j])) {
                                SST_trials1.finished = true;
                            }
                        }
                        end_delay_time = current_time + end_delay;
                    }
                }
            }
        }

        if (current_time >= end_delay_time)
        {
            continueRoutine = false;
        }
    MouseComponent mouse
      clickable = square_1, square_2, square_3, square_4, square_5, square_6, square_7, square_8, square_9
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [condition] = current_time >= end_time
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  Routine SST_flash2
    PolygonComponent background_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_10
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (-0.3, 0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_11
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0, 0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_12
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_13
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (-0.3, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_14
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_15
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0.3, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_16
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (-0.3, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_17
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_18
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0.3, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_spatial_span_2
      Code Type = Both
      Begin JS Routine:
        squares = [square_10, square_11, square_12, square_13, square_14, square_15, square_16, square_17, square_18];
        highlights = [Flash1, Flash2, Flash3, Flash4, Flash5, Flash6, Flash7, Flash8, Flash9, Flash10];
        start_time = 2;
        flash_time = 1;
        end_time = (flash_time * Num_of_flashes);
        end_delay = 0.75;
        end_delay_time = 999999;
        squares_clicked = [];
        click_count = 0;
        output_column_name = 'bad_name';

        counter = new util.Clock();
        inactive_color = new util.Color([0.6549, 0.6549, 0.6549]);
        activated_color = new util.Color([-0.3, -0.3, -0.3]);
        highlight_color = new util.Color([Red, Green, Blue]);
        document.body.style.cursor='auto';

        for (var i, _pj_c = 0, _pj_a = util.range(9), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            squares[i].fillColor = inactive_color;
        }
      Begin Routine:
        squares = [square_10, square_11, square_12, square_13, square_14, square_15, square_16, square_17, square_18]
        highlights = [Flash1, Flash2, Flash3, Flash4, Flash5, Flash6, Flash7, Flash8, Flash9, Flash10]
        start_time = 2
        flash_time = 1
        end_time = (flash_time * Num_of_flashes)
        end_delay = 0.75
        end_delay_time = 999999
        squares_clicked = []
        click_count = 0
        output_column_name = 'bad_name'

        # These have to be different in JavaScript
        counter = core.Clock()
        inactive_color = 'lightgrey'
        activated_color = 'darkgrey'
        highlight_color = [Red, Green, Blue]
        win.setMouseVisible(True);

        for i in range(9):
            squares[i].color = inactive_color
      Each Frame:
        #Return time in seconds since routine began
        current_time = counter.getTime() - start_time

        current_flash = current_time / flash_time
        current_index = int(current_flash)
        if current_time >= 0 and current_index >= 0 and current_index < Num_of_flashes:
            flash_fraction = current_flash - current_index
            highlight = highlights[current_index] - 1
            if flash_fraction < 0.67:
                squares[highlight].color = highlight_color
            else:
                squares[highlight].color = inactive_color

        if current_time >= end_time:
            for i in range(9):
                if mouse.isPressedIn(squares[i]):
                    if click_count > 0:
                        if squares_clicked[click_count - 1] == i + 1:
                            break   # duplicate, don't save

                    squares_clicked.append(i + 1)
                    click_count += 1
                    for j in range(9):
                        squares[j].color = inactive_color
                    squares[i].color = activated_color

                    if click_count == Num_of_flashes:
                        output_column_name = str('Output_sst')
                        thisExp.addData(output_column_name, squares_clicked)
                        for j in range(Num_of_flashes):
                            if squares_clicked[j] != highlights[j]:
                                SST_trials2.finished = True
                        end_delay_time = current_time + end_delay

        if current_time >= end_delay_time:
            continueRoutine = False

        # https://discourse.psychopy.org/t/code-component-to-count-mouse-clicks/11621/26

        # 'output_sst_' + str(Num_of_flashes)
      Each JS Frame:
        current_time = (counter.getTime() - start_time);
        current_flash = (current_time / flash_time);
        current_index = Number.parseInt(current_flash);
        if ((((current_time >= 0) && (current_index >= 0)) && (current_index < Num_of_flashes))) {
            flash_fraction = (current_flash - current_index);
            highlight = (highlights[current_index] - 1);
            if ((flash_fraction < 0.67)) {
                squares[highlight].fillColor = highlight_color;
            } else {
                squares[highlight].fillColor = inactive_color;
            }
        }
        if ((current_time >= end_time)) {
            for (var i, _pj_c = 0, _pj_a = util.range(9), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                if (mouse.isPressedIn(squares[i])) {
                    if ((click_count > 0)) {
                        if ((squares_clicked[(click_count - 1)] === (i + 1))) {
                            break;
                        }
                    }
                    squares_clicked.push((i + 1));
                    click_count += 1;
                    for (var j, _pj_f = 0, _pj_d = util.range(9), _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                        j = _pj_d[_pj_f];
                        squares[j].fillColor = inactive_color;
                    }
                    squares[i].fillColor = activated_color;
                    if ((click_count === Num_of_flashes)) {
                        output_column_name = "Output_sst".toString();
                        psychoJS.experiment.addData(output_column_name, squares_clicked);
                        for (var j, _pj_f = 0, _pj_d = util.range(Num_of_flashes), _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                            j = _pj_d[_pj_f];
                            if ((squares_clicked[j] !== highlights[j])) {
                                SST_trials2.finished = true;
                            }
                        }
                        end_delay_time = current_time + end_delay;
                    }
                }
            }
        }

        if (current_time >= end_delay_time)
        {
            continueRoutine = false;
        }
    MouseComponent mouse_2
      clickable = square_1, square_2, square_3, square_4, square_5, square_6, square_7, square_8, square_9
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [condition] = current_time >= end_time
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  Routine SST_flash3
    PolygonComponent background_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_19
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (-0.3, 0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_20
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0, 0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_21
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_22
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (-0.3, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_23
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_24
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0.3, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_25
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (-0.3, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_26
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_27
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0.3, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_spatial_span_3
      Code Type = Both
      Begin JS Routine:
        squares = [square_19, square_20, square_21, square_22, square_23, square_24, square_25, square_26, square_27];
        highlights = [Flash1, Flash2, Flash3, Flash4, Flash5, Flash6, Flash7, Flash8, Flash9, Flash10];
        start_time = 2;
        flash_time = 1;
        end_time = (flash_time * Num_of_flashes);
        end_delay = 0.75;
        end_delay_time = 999999;
        squares_clicked = [];
        click_count = 0;
        output_column_name = 'bad_name';

        counter = new util.Clock();
        inactive_color = new util.Color([0.6549, 0.6549, 0.6549]);
        activated_color = new util.Color([-0.3, -0.3, -0.3]);
        highlight_color = new util.Color([Red, Green, Blue]);
        document.body.style.cursor='auto';

        for (var i, _pj_c = 0, _pj_a = util.range(9), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            squares[i].fillColor = inactive_color;
        }
      Begin Routine:
        squares = [square_19, square_20, square_21, square_22, square_23, square_24, square_25, square_26, square_27]
        highlights = [Flash1, Flash2, Flash3, Flash4, Flash5, Flash6, Flash7, Flash8, Flash9, Flash10]
        start_time = 2
        flash_time = 1
        end_time = (flash_time * Num_of_flashes)
        end_delay = 0.75
        end_delay_time = 999999
        squares_clicked = []
        click_count = 0
        output_column_name = 'bad_name'

        # These have to be different in JavaScript
        counter = core.Clock()
        inactive_color = 'lightgrey'
        activated_color = 'darkgrey'
        highlight_color = [Red, Green, Blue]
        win.setMouseVisible(True);

        for i in range(9):
            squares[i].color = inactive_color
      Each Frame:
        #Return time in seconds since routine began
        current_time = counter.getTime() - start_time

        current_flash = current_time / flash_time
        current_index = int(current_flash)
        if current_time >= 0 and current_index >= 0 and current_index < Num_of_flashes:
            flash_fraction = current_flash - current_index
            highlight = highlights[current_index] - 1
            if flash_fraction < 0.67:
                squares[highlight].color = highlight_color
            else:
                squares[highlight].color = inactive_color

        if current_time >= end_time:
            for i in range(9):
                if mouse.isPressedIn(squares[i]):
                    if click_count > 0:
                        if squares_clicked[click_count - 1] == i + 1:
                            break   # duplicate, don't save

                    squares_clicked.append(i + 1)
                    click_count += 1
                    for j in range(9):
                        squares[j].color = inactive_color
                    squares[i].color = activated_color

                    if click_count == Num_of_flashes:
                        output_column_name = str('Output_sst')
                        thisExp.addData(output_column_name, squares_clicked)
                        for j in range(Num_of_flashes):
                            if squares_clicked[j] != highlights[j]:
                                SST_trials3.finished = True
                        end_delay_time = current_time + end_delay

        if current_time >= end_delay_time:
            continueRoutine = False

        # https://discourse.psychopy.org/t/code-component-to-count-mouse-clicks/11621/26

        # 'output_sst_' + str(Num_of_flashes)
      Each JS Frame:
        current_time = (counter.getTime() - start_time);
        current_flash = (current_time / flash_time);
        current_index = Number.parseInt(current_flash);
        if ((((current_time >= 0) && (current_index >= 0)) && (current_index < Num_of_flashes))) {
            flash_fraction = (current_flash - current_index);
            highlight = (highlights[current_index] - 1);
            if ((flash_fraction < 0.67)) {
                squares[highlight].fillColor = highlight_color;
            } else {
                squares[highlight].fillColor = inactive_color;
            }
        }
        if ((current_time >= end_time)) {
            for (var i, _pj_c = 0, _pj_a = util.range(9), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                if (mouse.isPressedIn(squares[i])) {
                    if ((click_count > 0)) {
                        if ((squares_clicked[(click_count - 1)] === (i + 1))) {
                            break;
                        }
                    }
                    squares_clicked.push((i + 1));
                    click_count += 1;
                    for (var j, _pj_f = 0, _pj_d = util.range(9), _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                        j = _pj_d[_pj_f];
                        squares[j].fillColor = inactive_color;
                    }
                    squares[i].fillColor = activated_color;
                    if ((click_count === Num_of_flashes)) {
                        output_column_name = "Output_sst".toString();
                        psychoJS.experiment.addData(output_column_name, squares_clicked);
                        for (var j, _pj_f = 0, _pj_d = util.range(Num_of_flashes), _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                            j = _pj_d[_pj_f];
                            if ((squares_clicked[j] !== highlights[j])) {
                                SST_trials3.finished = true;
                            }
                        }
                        end_delay_time = current_time + end_delay;
                    }
                }
            }
        }

        if (current_time >= end_delay_time)
        {
            continueRoutine = false;
        }
    MouseComponent mouse_3
      clickable = square_1, square_2, square_3, square_4, square_5, square_6, square_7, square_8, square_9
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [condition] = current_time >= end_time
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  Routine done_PsychoPy
    TextComponent done_PsychoPy_text_EN
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'English / Anglais'
      text = Good work! You will now be redirected to Qualtrics for the experiment debrief and to receive credit on SONA. Press SPACE to continue.
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    TextComponent done_PsychoPy_text_FR
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo['L1'] == 'French / Français'
      text = Bon travail! Vous allez maintenant être redirigé vers Qualtrics pour le débriefing de l'expérience et pour recevoir votre crédit sur SONA. Appuyiez sur ESPACE pour continuer.
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    KeyboardComponent done_PsychoPy_cont
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent extra_message
      Code Type = JS
      End JS Experiment:
        message = "Please click 'Ok' to be debriefed. Note that SONA will only be notified that you have finished after the debrief!"
Flow
  Routine DSST_settings
  LoopInitiator practice_outerloop loopType="TrialHandler"
    loopType = random
    nReps = 6
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    LoopInitiator practice_loop loopType="TrialHandler"
      loopType = random
      nReps = 100
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      Routine DSST_prac
    LoopTerminator practice_loop
  LoopTerminator practice_outerloop
  Routine DSST_end_practice
  LoopInitiator page_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 100
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    Routine DSST_start_page
    LoopInitiator loop loopType="TrialHandler"
      loopType = random
      nReps = 144
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      Routine DSST_trial
    LoopTerminator loop
  LoopTerminator page_loop
  Routine task_done
  Routine SST_instr
  LoopInitiator SST_trials1 loopType="TrialHandler"
    conditionsFile = spatial_span_key.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Red', -1.0), ('Green', 0.5), ('Blue', -1.0), ('Num_of_squares', 2), ('First_sq', 4), ('Second_sq', 8), ('Third_sq', 0), ('Fourth_sq', 0), ('Fifth_sq', 0), ('Sixth_sq', 0), ('Seventh_sq', 0), ('Eighth_sq', 0), ('Ninth_sq', 0), ('Tenth_sq', 0)]),
      OrderedDict([('Red', 0.5), ('Green', -1.0), ('Blue', -1.0), ('Num_of_squares', 3), ('First_sq', 5), ('Second_sq', 4), ('Third_sq', 2), ('Fourth_sq', 0), ('Fifth_sq', 0), ('Sixth_sq', 0), ('Seventh_sq', 0), ('Eighth_sq', 0), ('Ninth_sq', 0), ('Tenth_sq', 0)]),
      OrderedDict([('Red', -1.0), ('Green', -1.0), ('Blue', 0.5), ('Num_of_squares', 4), ('First_sq', 3), ('Second_sq', 9), ('Third_sq', 5), ('Fourth_sq', 6), ('Fifth_sq', 0), ('Sixth_sq', 0), ('Seventh_sq', 0), ('Eighth_sq', 0), ('Ninth_sq', 0), ('Tenth_sq', 0)]),
      OrderedDict([('Red', 0.5), ('Green', 0.5), ('Blue', -1.0), ('Num_of_squares', 5), ('First_sq', 9), ('Second_sq', 1), ('Third_sq', 2), ('Fourth_sq', 6), ('Fifth_sq', 3), ('Sixth_sq', 0), ('Seventh_sq', 0), ('Eighth_sq', 0), ('Ninth_sq', 0), ('Tenth_sq', 0)]),
      OrderedDict([('Red', 0.5), ('Green', -1.0), ('Blue', 0.5), ('Num_of_squares', 6), ('First_sq', 7), ('Second_sq', 5), ('Third_sq', 4), ('Fourth_sq', 1), ('Fifth_sq', 6), ('Sixth_sq', 2), ('Seventh_sq', 0), ('Eighth_sq', 0), ('Ninth_sq', 0), ('Tenth_sq', 0)])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
    Routine SST_flash1
  LoopTerminator SST_trials1
  Routine SST_done_set
  LoopInitiator SST_trials2 loopType="TrialHandler"
    conditionsFile = spatial_span_key2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Red', -1.0), ('Green', 0.5), ('Blue', -1.0), ('Num_of_flashes', 2), ('Flash1', 1), ('Flash2', 7), ('Flash3', 0), ('Flash4', 0), ('Flash5', 0), ('Flash6', 0), ('Flash7', 0), ('Flash8', 0), ('Flash9', 0), ('Flash10', 0)]),
      OrderedDict([('Red', 0.5), ('Green', -1.0), ('Blue', -1.0), ('Num_of_flashes', 3), ('Flash1', 5), ('Flash2', 7), ('Flash3', 2), ('Flash4', 0), ('Flash5', 0), ('Flash6', 0), ('Flash7', 0), ('Flash8', 0), ('Flash9', 0), ('Flash10', 0)]),
      OrderedDict([('Red', -1.0), ('Green', -1.0), ('Blue', 0.5), ('Num_of_flashes', 4), ('Flash1', 9), ('Flash2', 8), ('Flash3', 1), ('Flash4', 3), ('Flash5', 0), ('Flash6', 0), ('Flash7', 0), ('Flash8', 0), ('Flash9', 0), ('Flash10', 0)]),
      OrderedDict([('Red', 0.5), ('Green', 0.5), ('Blue', -1.0), ('Num_of_flashes', 5), ('Flash1', 4), ('Flash2', 3), ('Flash3', 6), ('Flash4', 2), ('Flash5', 1), ('Flash6', 0), ('Flash7', 0), ('Flash8', 0), ('Flash9', 0), ('Flash10', 0)]),
      OrderedDict([('Red', 0.5), ('Green', -1.0), ('Blue', 0.5), ('Num_of_flashes', 6), ('Flash1', 9), ('Flash2', 5), ('Flash3', 6), ('Flash4', 1), ('Flash5', 4), ('Flash6', 8), ('Flash7', 0), ('Flash8', 0), ('Flash9', 0), ('Flash10', 0)]),
      OrderedDict([('Red', 1.0), ('Green', 0.5), ('Blue', 0.5), ('Num_of_flashes', 7), ('Flash1', 7), ('Flash2', 2), ('Flash3', 8), ('Flash4', 9), ('Flash5', 3), ('Flash6', 4), ('Flash7', 1), ('Flash8', 0), ('Flash9', 0), ('Flash10', 0)])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
    Routine SST_flash2
  LoopTerminator SST_trials2
  Routine SST_done_set
  LoopInitiator SST_trials3 loopType="TrialHandler"
    conditionsFile = spatial_span_key3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Red', -1.0), ('Green', 0.5), ('Blue', -1.0), ('Num_of_flashes', 2), ('Flash1', 5), ('Flash2', 2), ('Flash3', 0), ('Flash4', 0), ('Flash5', 0), ('Flash6', 0), ('Flash7', 0), ('Flash8', 0), ('Flash9', 0), ('Flash10', 0)]),
      OrderedDict([('Red', 0.5), ('Green', -1.0), ('Blue', -1.0), ('Num_of_flashes', 3), ('Flash1', 9), ('Flash2', 3), ('Flash3', 7), ('Flash4', 0), ('Flash5', 0), ('Flash6', 0), ('Flash7', 0), ('Flash8', 0), ('Flash9', 0), ('Flash10', 0)]),
      OrderedDict([('Red', -1.0), ('Green', -1.0), ('Blue', 0.5), ('Num_of_flashes', 4), ('Flash1', 4), ('Flash2', 2), ('Flash3', 1), ('Flash4', 8), ('Flash5', 0), ('Flash6', 0), ('Flash7', 0), ('Flash8', 0), ('Flash9', 0), ('Flash10', 0)]),
      OrderedDict([('Red', 0.5), ('Green', 0.5), ('Blue', -1.0), ('Num_of_flashes', 5), ('Flash1', 3), ('Flash2', 8), ('Flash3', 1), ('Flash4', 7), ('Flash5', 2), ('Flash6', 0), ('Flash7', 0), ('Flash8', 0), ('Flash9', 0), ('Flash10', 0)]),
      OrderedDict([('Red', 0.5), ('Green', -1.0), ('Blue', 0.5), ('Num_of_flashes', 6), ('Flash1', 3), ('Flash2', 4), ('Flash3', 6), ('Flash4', 8), ('Flash5', 1), ('Flash6', 9), ('Flash7', 0), ('Flash8', 0), ('Flash9', 0), ('Flash10', 0)]),
      OrderedDict([('Red', 1.0), ('Green', 0.5), ('Blue', 0.5), ('Num_of_flashes', 7), ('Flash1', 2), ('Flash2', 6), ('Flash3', 3), ('Flash4', 1), ('Flash5', 5), ('Flash6', 8), ('Flash7', 4), ('Flash8', 0), ('Flash9', 0), ('Flash10', 0)])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
    Routine SST_flash3
  LoopTerminator SST_trials3
  Routine task_done
  Routine FHAT_instr
  LoopInitiator FHAT_loop loopType="TrialHandler"
    conditionsFile = animations_key.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('movie_filename', 'FHA_MI_COAXING.mp4')]),
      OrderedDict([('movie_filename', 'FHA_NI_BILLIARD.mp4')]),
      OrderedDict([('movie_filename', 'FHA_MI_SEDUCING.mp4')]),
      OrderedDict([('movie_filename', 'FHA_PI_DANCING.mp4')]),
      OrderedDict([('movie_filename', 'FHA_NI_TENNIS.mp4')]),
      OrderedDict([('movie_filename', 'FHA_NI_STAR.mp4')]),
      OrderedDict([('movie_filename', 'FHA_PI_LEADING.mp4')]),
      OrderedDict([('movie_filename', 'FHA_MI_MOCKING.mp4')]),
      OrderedDict([('movie_filename', 'FHA_PI_CHASE.mp4')])]
    Routine FHAT_video
    Routine FHAT_video_q
  LoopTerminator FHAT_loop
  Routine done_PsychoPy
